PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1000, 600]
  expName = brightness_memory_soloproject
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see a series of images.
        Simply observe each image carefully.
        You do not need to respond to these images.
        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EncodingTrial
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    PolygonComponent polygon
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent image
      draggable = True
      image [set every repeat] = $imgfile
      size = (0.6, 0.6)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 2.0
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  Routine InterferenceTrial
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $question
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    KeyboardComponent key_resp_2
      allowedKeys = '0','1','2','3','4','5','6','7','8','9'
      correctAns = $correctAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine RecognitionTrial
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    ImageComponent image_2
      image [set every repeat] = $imgfile
      size = (0.6, 0.6)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = $CorrectAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine Instructions_2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Next, you will solve a few simple math questions.
        Type the answer using the number keys.
        Press SPACE to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions_3
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see some images again.
        For each one, decide whether it was shown earlier in the experiment.
        Press Y if you saw it before.
        Press N if it is new.
        Press SPACE to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Manipulation_check
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Before the recognition test began, did you expect that your memory for the images would be tested?
        Press Y = Yes
        Press N = No
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Thank_you
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Thank you for taking part in this experiment.
        Your time and participation are greatly appreciated.
        Your responses will help us understand how people remember visual information under different conditions.
        All data has been recorded anonymously and will be used only for academic purposes.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Encoding_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imgfile': 'images/black1.jpg', 'img_brightness': 'bright'},
      {'imgfile': 'images/black2.jpg', 'img_brightness': 'dark'},
      {'imgfile': 'images/black3.jpg', 'img_brightness': 'bright'},
      {'imgfile': 'images/darkblue1.jpg', 'img_brightness': 'dark'},
      {'imgfile': 'images/green1.jpg', 'img_brightness': 'bright '},
      {'imgfile': 'images/green2.jpg', 'img_brightness': 'dark'},
      {'imgfile': 'images/red1.jpeg', 'img_brightness': 'dark'},
      {'imgfile': 'images/red2.jpg', 'img_brightness': 'bright'},
      {'imgfile': 'images/shallowblue1.jpg', 'img_brightness': 'dark'},
      {'imgfile': 'images/white1.jpg', 'img_brightness': 'bright'},
      {'imgfile': 'images/white2.jpeg', 'img_brightness': 'dark'},
      {'imgfile': 'images/yellow1.jpg', 'img_brightness': 'bright'}]
    Routine EncodingTrial
  LoopTerminator trials
  Routine Instructions_2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Interfernce_questions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'question': '2 + 1 = ?', 'correctAns': 3.0},
      {'question': '1 + 3 = ?', 'correctAns': 4.0},
      {'question': '5 - 2 = ?', 'correctAns': 3.0},
      {'question': '4 - 1 = ?', 'correctAns': 3.0},
      {'question': '3 + 2 = ?', 'correctAns': 5.0}]
    Routine InterferenceTrial
  LoopTerminator trials_2
  Routine instructions_3
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = np.random.choice(range(24), 12, replace=False) 
    conditionsFile = recognition_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'imgfile': 'images/black1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/black2.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/black3.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/darkblue1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/green1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/green2.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/red1.jpeg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/red2.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/shallowblue1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/white1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/white2.jpeg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'dark'},
      {'imgfile': 'images/yellow1.jpg', 'old_new': 'old', 'CorrectAns': 'y', 'img_brightness': 'bright'},
      {'imgfile': 'images/foil_black1.jpg', 'old_new': 'new', 'CorrectAns': 'n', 'img_brightness': 'bright'},
      {'imgfile': 'images/foil_black2.jpg', 'old_new': 'new', 'CorrectAns': 'n', 'img_brightness': 'dark'},
      {'imgfile': 'images/foil_black3.jpg', 'old_new': 'new', 'CorrectAns': 'n', 'img_brightness': 'bright'}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
    Routine RecognitionTrial
  LoopTerminator trials_3
  Routine Manipulation_check
  Routine Thank_you
