PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = new_stroop0.1
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (10, 10)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 0.5
      units = pix
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    TextComponent text
      color [set every repeat] = $colour
      letterHeight = 0.05
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 5
      text [set every repeat] = $word
      units = pix
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    KeyboardComponent key_resp
      allowedKeys = 'r','b'
      correctAns = $correct_res
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine Instructions
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press R = Red and B = Blue based on the color of the word. press the key as quickly and accurately as possible.

        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you !!
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = /Users/siddhirathod/Desktop/psychopy-lab/conditions_0.1.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'word': 'RED', 'colour': 'red', 'stim_condition': 'C', 'correct_res': 'r'},
      {'word': 'RED', 'colour': 'blue', 'stim_condition': 'I', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'blue', 'stim_condition': 'C', 'correct_res': 'b'},
      {'word': 'BLUE', 'colour': 'red', 'stim_condition': 'I', 'correct_res': 'r'}]
    Routine trial
  LoopTerminator trials
  Routine End
